PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['conditions_0.csv', 'conditions_practice.xlsx', 'conditions_1.csv', 'keyJ.png', 'keyH.png', 'keyG.png', 'stimuli/Person/10.jpg', 'stimuli/Person/11.jpg', 'stimuli/Person/12.jpg', 'stimuli/Person/13.jpg', 'stimuli/Person/14.jpg', 'stimuli/Person/15.jpg', 'stimuli/Person/16.jpg', 'stimuli/Person/17.jpg', 'stimuli/Person/18.jpg', 'stimuli/Person/19.jpg', 'stimuli/Person/20.jpg', 'stimuli/Person/21.jpg', 'stimuli/Person/22.jpg', 'stimuli/Person/23.jpg', 'stimuli/Person/24.jpg', 'stimuli/Person/25.jpg', 'stimuli/Person/26.jpg', 'stimuli/Person/27.jpg', 'stimuli/Person/28.jpg', 'stimuli/Person/29.jpg', 'stimuli/Food/10.jpg', 'stimuli/Food/11.jpg', 'stimuli/Food/12.jpg', 'stimuli/Food/13.jpg', 'stimuli/Food/14.jpg', 'stimuli/Food/15.jpg', 'stimuli/Food/16.jpg', 'stimuli/Food/17.jpg', 'stimuli/Food/18.jpg', 'stimuli/Food/19.jpg', 'stimuli/Food/20.jpg', 'stimuli/Food/21.jpg', 'stimuli/Food/22.jpg', 'stimuli/Food/23.jpg', 'stimuli/Food/24.jpg', 'stimuli/Food/25.jpg', 'stimuli/Food/26.jpg', 'stimuli/Food/27.jpg', 'stimuli/Food/28.jpg', 'stimuli/Food/29.jpg', 'stimuli/Car/10.jpg', 'stimuli/Car/11.jpg', 'stimuli/Car/12.jpg', 'stimuli/Car/13.jpg', 'stimuli/Car/14.jpg', 'stimuli/Car/15.jpg', 'stimuli/Car/16.jpg', 'stimuli/Car/17.jpg', 'stimuli/Car/18.jpg', 'stimuli/Car/19.jpg', 'stimuli/Car/20.jpg', 'stimuli/Car/21.jpg', 'stimuli/Car/22.jpg', 'stimuli/Car/23.jpg', 'stimuli/Car/24.jpg', 'stimuli/Car/25.jpg', 'stimuli/Car/26.jpg', 'stimuli/Car/27.jpg', 'stimuli/Car/28.jpg', 'stimuli/Car/29.jpg', 'stimuli/Animal/10.jpg', 'stimuli/Animal/11.jpg', 'stimuli/Animal/12.jpg', 'stimuli/Animal/13.jpg', 'stimuli/Animal/14.jpg', 'stimuli/Animal/15.jpg', 'stimuli/Animal/16.jpg', 'stimuli/Animal/17.jpg', 'stimuli/Animal/18.jpg', 'stimuli/Animal/19.jpg', 'stimuli/Animal/20.jpg', 'stimuli/Animal/21.jpg', 'stimuli/Animal/22.jpg', 'stimuli/Animal/23.jpg', 'stimuli/Animal/24.jpg', 'stimuli/Animal/25.jpg', 'stimuli/Animal/26.jpg', 'stimuli/Animal/27.jpg', 'stimuli/Animal/28.jpg', 'stimuli/Animal/29.jpg']
  Save csv file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1352, 878]
  color = $[-1, -1, -1]
  expName = working_memory_cs
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine trial
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    CodeComponent trial_condition
      Code Type = Auto->JS
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      Begin Routine:
        # Map categories to their folder paths and display names
        categories = {
            1: ('stimuli/Person/', 'people'),
            2: ('stimuli/Animal/', 'animals'),
            3: ('stimuli/Food/', 'food items'),
            4: ('stimuli/Car/', 'cars')
        }

        positions = {1: 'Earlier', 2: 'Later'}

        # Randomly select two pictures based on the loop-provided conditions
        pic1 = f"{categories[first_cat][0]}{first_pic_idx}.jpg"
        pic2 = f"{categories[second_cat][0]}{second_pic_idx}.jpg"

        # Construct the probe question text based on loop variables
        if probe_pic in positions:
            position_text = positions[probe_pic]
            if first_cat == second_cat:
                same_category = first_cat
                different_category = same_category
                if probe_validity == 1:
                    # If valid, ask about the same category
                    category_text = categories[same_category][1]
                else:
                    # If not valid, choose a different category
                    different_category = 5 - same_category
                    category_text = categories[different_category][1]
            else:
                if probe_validity == 1:
                    if probe_pic == 1:
                        category_text = categories[first_cat][1]
                    else:
                        category_text = categories[second_cat][1]
                else:
                    if probe_pic == 1:
                        category_text = categories[second_cat][1]
                    else:
                        category_text = categories[first_cat][1]

            # Construct probe question text using concatenation
            probe_text = position_text + " picture, how many " + category_text + "?"
        else:
            probe_text = "Invalid probe picture condition."
        # Save the paths and probe text for use in the next components
        thisExp.addData('pic1', pic1)
        thisExp.addData('pic2', pic2)
        thisExp.addData('probe_cat', category_text)
        thisExp.addData('probe_text', probe_text)
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent stim1
      image [set every repeat] = $pic1
      size = [0.6,0.4]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    TextComponent delay1
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = HOLD
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    ImageComponent stim2
      image [set every repeat] = $pic2
      size = [0.6,0.4]
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    TextComponent delay2
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2.5
      text = HOLD
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    TextComponent probe
      letterHeight = 0.05
      startVal [time (s)] = 6.5
      text [set every repeat] = $probe_text
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    TextComponent option1
      color [set every repeat] = $option_texts[0]['color']
      letterHeight = 0.1
      pos [set every repeat] = $option_texts[0]['pos']
      startVal [time (s)] = 6.5
      text [set every repeat] = $option_texts[0]['text']
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    TextComponent option2
      color [set every repeat] = $option_texts[1]['color']
      letterHeight = 0.1
      pos [set every repeat] = $option_texts[1]['pos']
      startVal [time (s)] = 6.5
      text [set every repeat] = $option_texts[1]['text']
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    TextComponent option3
      color [set every repeat] = $option_texts[2]['color']
      letterHeight = 0.1
      pos [set every repeat] = $option_texts[2]['pos']
      startVal [time (s)] = 6.5
      text [set every repeat] = $option_texts[2]['text']
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    KeyboardComponent key_resp
      allowedKeys = 'g','h','j'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 6.5
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  Routine thanks
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    TextboxComponent endmsg
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thanks for taking part!
  Routine Instruction
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    KeyboardComponent instructionKey0
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent instruction_txt_pre
      bold = False
      borderColor = black
      editable = False
      fillColor = black
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, 0.1)
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Working Memory Task.

        You will see two pictures of people, animals, food  or cars in each trial. After a short delay, you will be asked a question about one (earlier/later) of the images.

        Press SPACE to continue.
  Routine Instruction_0
    RoutineSettingsComponent Instruction_0
      saveStartStop = False
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    KeyboardComponent instructionKey1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent instruction_txt_up
      bold = False
      borderColor = black
      editable = False
      fillColor = black
      letterHeight = 0.05
      opacity = 0.8
      pos = (0,0.25)
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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      text:
        There are 3 options at the left, top and right of the question.

        Please use keys
    TextboxComponent instruction_txt_bot
      bold = False
      borderColor = black
      editable = False
      fillColor = black
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -0.25)
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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      text:
        to choose your answers

        Press SPACE to practice!
    ImageComponent keyG
      image = keyG.png
      pos = (-0.25, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent keyH
      image = keyH.png
      pos = (-0,0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent keyJ
      image = keyJ.png
      pos = (0.25,0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent textboxG
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.25, -0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Left
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    TextboxComponent textboxH
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0, -0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Top
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    TextboxComponent textboxJ
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.25, -0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Right
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  Routine Practice
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    CodeComponent trial_condition_pra
      Code Type = Auto->JS
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      Begin Experiment:
        # Define response options
        options = [' 0 ', ' 1 ', ' 5 ']  # Modify the options as needed
        options_color = [(0, 0.8, 0), (0, 0, 0.8), (0.8, 0, 0)]  # Colors for options (green, blue, red)
        options_loc = [
            (-0.5, 0),   # Left position (normalized coordinates)
            (0, 0.2),    # Top-center position
            (0.5, 0)     # Right position
        ]

        # Store option positions and text for display
        option_texts = []
        for i in range(len(options)):
            option_texts.append({
                'text': f"{options[i]}",  # Text with bold formatting
                'color': options_color[i],
                'pos': options_loc[i]
            })
      Begin Routine:
        # Map categories to their folder paths and display names
        categories = {
            1: ('stimuli/Person/', 'people'),
            2: ('stimuli/Animal/', 'animals'),
            3: ('stimuli/Food/', 'food items'),
            4: ('stimuli/Car/', 'cars')
        }

        positions = {1: 'Earlier', 2: 'Later'}

        # Select pictures
        pic1 = f"{categories[first_cat][0]}{first_pic_idx}.jpg"
        pic2 = f"{categories[second_cat][0]}{second_pic_idx}.jpg"

        # Construct the probe question text based on loop variables
        if probe_pic in positions:
            position_text = positions[probe_pic]
            if first_cat == second_cat:
                same_category = first_cat
                different_category = same_category
                if probe_validity == 1:
                    # If valid, ask about the same category
                    category_text = categories[same_category][1]
                elif probe_validity == 0:
                    # If not valid, choose a different category
                    different_category = 5 - same_category
                    category_text = categories[different_category][1]
            else:
                if probe_validity == 1:
                    if probe_pic == 1:
                        category_text = categories[first_cat][1]
                    else:
                        category_text = categories[second_cat][1]
                else:
                    if probe_pic == 1:
                        category_text = categories[second_cat][1]
                    else:
                        category_text = categories[first_cat][1]

            # Construct probe question text using concatenation
            probe_text = position_text + " picture, how many " + category_text + "?"
        else:
            probe_text = "Invalid probe picture condition."
    TextComponent pactice_text
      letterHeight = 0.025
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Practice trial
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    TextComponent fixation_pra
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent stim1_pra
      image [set every repeat] = $pic1
      size = [0.6,0.4]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    TextComponent delay1_pra
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = HOLD
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    ImageComponent stim2_pra
      image [set every repeat] = $pic2
      size = [0.6,0.4]
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    TextComponent delay2_pra
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = HOLD
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    TextComponent probe_pra
      letterHeight = 0.05
      startVal [time (s)] = 5
      text [set every repeat] = $probe_text
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    TextComponent option1_pra
      color [set every repeat] = $option_texts[0]['color']
      letterHeight = 0.1
      pos [set every repeat] = $option_texts[0]['pos']
      startVal [time (s)] = 5
      text [set every repeat] = $option_texts[0]['text']
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    TextComponent option2_pra
      color [set every repeat] = $option_texts[1]['color']
      letterHeight = 0.1
      pos [set every repeat] = $option_texts[1]['pos']
      startVal [time (s)] = 5
      text [set every repeat] = $option_texts[1]['text']
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    TextComponent option3_pra
      color [set every repeat] = $option_texts[2]['color']
      letterHeight = 0.1
      pos [set every repeat] = $option_texts[2]['pos']
      startVal [time (s)] = 5
      text [set every repeat] = $option_texts[2]['text']
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    KeyboardComponent key_resp1_pra
      allowedKeys = 'g','h','j'
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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  Routine Start
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    TextboxComponent instruction_txt
      bold = False
      borderColor = black
      editable = False
      fillColor = black
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, 0.1)
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      text = Press SPACE to start the task!
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    KeyboardComponent startKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent keyG_3
      image = keyG.png
      pos = (-0.25, -0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent keyH_3
      image = keyH.png
      pos = (-0,-0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent keyJ_3
      image = keyJ.png
      pos = (0.25,-0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent textboxG_3
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.25, -0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Left
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    TextboxComponent textboxH_3
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0, -0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Top
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    TextboxComponent textboxJ_3
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.25, -0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Right
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  Routine break_text
    RoutineSettingsComponent break_text
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if (trials.thisN +1) % 72 != 0:
            continueRoutine = False
    TextComponent text_break
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(round(trials.thisN/288,2)*100) + '% completed, press SPACE to continue'
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    KeyboardComponent key_resp_break
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent keyG_2
      image = keyG.png
      pos = (-0.25, -0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent keyH_2
      image = keyH.png
      pos = (-0,-0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent keyJ_2
      image = keyJ.png
      pos = (0.25,-0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent textboxG_2
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.25, -0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Left
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    TextboxComponent textboxH_2
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0, -0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Top
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    TextboxComponent textboxJ_2
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.25, -0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Right
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Flow
  Routine Instruction
  Routine Instruction_0
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = conditions_practice.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('first_cat', 1), ('second_cat', 2), ('probe_pic', 1), ('probe_validity', 0), ('first_pic_idx', 10), ('second_pic_idx', 20)]),
      OrderedDict([('first_cat', 2), ('second_cat', 3), ('probe_pic', 2), ('probe_validity', 0), ('first_pic_idx', 20), ('second_pic_idx', 10)]),
      OrderedDict([('first_cat', 4), ('second_cat', 4), ('probe_pic', 2), ('probe_validity', 1), ('first_pic_idx', 20), ('second_pic_idx', 10)]),
      OrderedDict([('first_cat', 2), ('second_cat', 1), ('probe_pic', 2), ('probe_validity', 0), ('first_pic_idx', 10), ('second_pic_idx', 10)]),
      OrderedDict([('first_cat', 4), ('second_cat', 2), ('probe_pic', 1), ('probe_validity', 1), ('first_pic_idx', 10), ('second_pic_idx', 10)]),
      OrderedDict([('first_cat', 1), ('second_cat', 1), ('probe_pic', 1), ('probe_validity', 1), ('first_pic_idx', 20), ('second_pic_idx', 10)])]
    Routine Practice
  LoopTerminator practice_trials
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_0.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('first_cat', 4), ('second_cat', 1), ('probe_pic', 1), ('probe_validity', 0), ('first_pic_idx', 27), ('second_pic_idx', 19), ('correct_answer', 0)]),
      OrderedDict([('first_cat', 3), ('second_cat', 1), ('probe_pic', 2), ('probe_validity', 1), ('first_pic_idx', 12), ('second_pic_idx', 28), ('correct_answer', 5)]),
      OrderedDict([('first_cat', 2), ('second_cat', 1), ('probe_pic', 1), ('probe_validity', 1), ('first_pic_idx', 23), ('second_pic_idx', 18), ('correct_answer', 5)]),
      OrderedDict([('first_cat', 3), ('second_cat', 1), ('probe_pic', 1), ('probe_validity', 0), ('first_pic_idx', 20), ('second_pic_idx', 24), ('correct_answer', 0)]),
      OrderedDict([('first_cat', 2), ('second_cat', 4), ('probe_pic', 1), ('probe_validity', 1), ('first_pic_idx', 21), ('second_pic_idx', 28), ('correct_answer', 5)]),
      OrderedDict([('first_cat', 1), ('second_cat', 1), ('probe_pic', 2), ('probe_validity', 1), ('first_pic_idx', 12), ('second_pic_idx', 15), ('correct_answer', 1)]),
      OrderedDict([('first_cat', 3), ('second_cat', 2), ('probe_pic', 2), ('probe_validity', 1), ('first_pic_idx', 11), ('second_pic_idx', 18), ('correct_answer', 1)]),
      OrderedDict([('first_cat', 4), ('second_cat', 4), ('probe_pic', 1), ('probe_validity', 1), ('first_pic_idx', 29), ('second_pic_idx', 14), ('correct_answer', 5)]),
      OrderedDict([('first_cat', 2), ('second_cat', 2), ('probe_pic', 2), ('probe_validity', 0), ('first_pic_idx', 29), ('second_pic_idx', 11), ('correct_answer', 0)])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
    Routine trial
    Routine break_text
  LoopTerminator trials
  Routine thanks
